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Source:Signal%20Properties int SourceCh= 63 // number of digitized and stored channels (allow_override)
Source:Signal%20Properties int SampleBlockSize= 64 // number of samples transmitted at a time (allow_override)
Source:Signal%20Properties int SamplingRate= 2048Hz // sampling rate (allow_override)
Source:Signal%20Properties list ChannelNames= 0 // list of channel names (allow_override)
Source:Signal%20Properties list SourceChOffset= 1 auto // Offset for channels in A/D units (allow_override)
Source:Signal%20Properties list SourceChGain= 1 auto // gain for each channel (A/D units per physical unit) (allow_override)
Storage:Data%20Location string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Storage:Session string SubjectName= Name Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 1 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:MicromedADC string ServerAddress= *:5000 // address and port of the Micromed BCI Server
Source:MicromedADC int PacketRate= 32 5 1 128 // the number of Micromed packets per second (64 SD; 32 LTM)
Source:MicromedADC int SignalType= 3 0 0 3 // numeric type of output signal:  0: int16, 1: float24, 2: float32, 3: int32 (enumeration)
Source:MicromedADC int ConditionMask= 0 1 0 0 // Mask for conditions, other information is sent as MicroMedCode
Source:MicromedADC int Priority= 1 1 0 5 // Set CPU priority for Source Module
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation string StorageTime= % // time of beginning of data storage
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes) (boolean)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing list TransmitChList= 63 Ch1 Ch2 Ch3 Ch4 Ch5 Ch6 Ch7 Ch8 Ch9 Ch10 Ch11 Ch12 Ch13 Ch14 Ch15 Ch16 Ch17 Ch18 Ch19 Ch20 Ch21 Ch22 Ch23 Ch24 Ch25 Ch26 Ch27 Ch28 Ch29 Ch30 Ch31 Ch32 Ch33 Ch34 Ch35 Ch36 Ch37 Ch38 Ch39 Ch40 Ch41 Ch42 Ch43 Ch44 Ch45 Ch46 Ch47 Ch48 Ch49 Ch50 Ch51 Ch52 Ch53 Ch54 Ch55 Ch56 Ch57 Ch58 Ch59 Ch60 Ch61 Ch62 Ch63 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 MicromedADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Source:Montage list ChList1= 124 Ch2 Ch3 Ch4 Ch5 Ch6 Ch7 Ch8 Ch9 Ch10 Ch11 Ch12 Ch13 Ch14 Ch15 Ch16 Ch17 Ch18 Ch19 Ch20 Ch21 Ch22 Ch23 Ch24 Ch25 Ch26 Ch27 Ch28 Ch29 Ch30 Ch31 Ch32 Ch33 Ch34 Ch35 Ch36 Ch37 Ch38 Ch39 Ch40 Ch41 Ch42 Ch43 Ch44 Ch45 Ch46 Ch47 Ch48 Ch49 Ch50 Ch51 Ch52 Ch53 Ch54 Ch55 Ch56 Ch57 Ch58 Ch59 Ch60 Ch61 Ch62 Ch63 Ch2 Ch3 Ch4 Ch5 Ch6 Ch7 Ch8 Ch9 Ch10 Ch11 Ch12 Ch13 Ch14 Ch15 Ch16 Ch17 Ch18 Ch19 Ch20 Ch21 Ch22 Ch23 Ch24 Ch25 Ch26 Ch27 Ch28 Ch29 Ch30 Ch31 Ch32 Ch33 Ch34 Ch35 Ch36 Ch37 Ch38 Ch39 Ch40 Ch41 Ch42 Ch43 Ch44 Ch45 Ch46 Ch47 Ch48 Ch49 Ch50 Ch51 Ch52 Ch53 Ch54 Ch55 Ch56 Ch57 Ch58 Ch59 Ch60 Ch61 Ch62 Ch63 // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
Source:Montage list ChList2= 124 Ch1 Ch2 Ch3 Ch4 Ch5 Ch6 Ch7 Ch8 Ch9 Ch10 Ch11 Ch12 Ch13 Ch14 Ch15 Ch16 Ch17 Ch18 Ch19 Ch20 Ch21 Ch22 Ch23 Ch24 Ch25 Ch26 Ch27 Ch28 Ch29 Ch30 Ch31 Ch32 Ch33 Ch34 Ch35 Ch36 Ch37 Ch38 Ch39 Ch40 Ch41 Ch42 Ch43 Ch44 Ch45 Ch46 Ch47 Ch48 Ch49 Ch50 Ch51 Ch52 Ch53 Ch54 Ch55 Ch56 Ch57 Ch58 Ch59 Ch60 Ch61 Ch62 Ch1 Ch2 Ch3 Ch4 Ch5 Ch6 Ch7 Ch8 Ch9 Ch10 Ch11 Ch12 Ch13 Ch14 Ch15 Ch16 Ch17 Ch18 Ch19 Ch20 Ch21 Ch22 Ch23 Ch24 Ch25 Ch26 Ch27 Ch28 Ch29 Ch30 Ch31 Ch32 Ch33 Ch34 Ch35 Ch36 Ch37 Ch38 Ch39 Ch40 Ch41 Ch42 Ch43 Ch44 Ch45 Ch46 Ch47 Ch48 Ch49 Ch50 Ch51 Ch52 Ch53 Ch54 Ch55 Ch56 Ch57 Ch58 Ch59 Ch60 Ch61 Ch62 // list of channels subtracted to ChList1. Bipolar Montage.
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Filtering:FIRFilter int FIRIntegration= 0 0 0 3 // FIR Integration: 0 none, 1 mean, 2 rms, 3 max (enumeration)
Filtering:FIRFilter matrix FIRCoefficients= 124 64 0.0005382352350377255 0.0005270884015014582 0.000482077253671128 0.0003767988933397613 0.00017230541438298573 -0.00017744844219648643 -0.0007178332813424619 -0.0014842242503546729 -0.0024921695640233296 -0.003728245796275637 -0.005142829932657192 -0.006645913451776742 -0.008106845747562104 -0.009358541728182389 -0.01020625330118268 -0.010440528752524839 -0.009853515902203859 -0.008257353711289038 -0.005503088103547699 -0.001498377696828645 0.003777752438982612 0.010264688051071712 0.01781578888548643 0.026200532750412477 0.035113479695479656 0.04418969456975501 0.05302567638883583 0.061204320897384666 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-0.008463480499786865 1 % % // FIR Filter Coefficients (rows correspond to channels; empty matrix for off)
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ADM:ADMFilter float RefractoryPeriod= 0.00048828125 0.0003 % % // ADM ref parameter
ADM:ADMFilter int LengthTuning= 5 10 0 60 // Lenght of the tuning phase (seconds)
ADM:ADMFilter intlist SelectedChannel= 124 0 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20 21 22 23 24 25 26 27 28 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123 % 0 300 // ID of the channel to process
ADM:ADMFilter string OutputA= ..//UPDN_EPI.txt // Output file ADM events A
ADM:ADMFilter string OutputB= ..//UPDN2_EPI.txt // Output file ADM events B
ADM:ADMFilter floatlist LenWindow= 124 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 0.05 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0.005 % 0.001 1 // Window Length for each block
ADM:ADMFilter intlist percentileDelta= 124 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 40 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50 % 10 90Percentile 
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System:Configuration matrix SignalProcessingFilterChain= 3 { Filter%20Name Position%20String } TransmissionFilterDIFF 1.3 FIRFilter 2.B ADMFilter 2.C // SignalProcessing filter chain (noedit)(readonly)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
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ParallelPort:Output int OutputMode= 1 1 1 2 // ParallelPortOutput cell interpret mode: 1 Word, 2 Bit (enumeration)
ParallelPort:Output matrix ParallelPortOutput= 0 { Device%20Name Expression } // Matrix of Expressions for parallel port output
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 ParallelPortFilter 3.B // Application filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 6036 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
